WorkflowBuilder(Version=2.8.1)
Bonsai.IO.ReadAllText(Path=DataSchemas\ExampleSession.yml)
-> AindVrForagingDataSchema.DeserializeFromYaml(Type=TypeMapping<AindVrForagingDataSchema.AindVrForagingSession>)
-> AsyncSubject SessionSchema

GroupWorkflow Config
    GroupWorkflow SessionSettings
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=Metadata.RngSeed)
        -> PropertyMapping(Seed)
        -> Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Take(Count=1)
        -> AsyncSubject RngSeed

        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=Metadata.Hardware.Screen.TextureAssetDirectory)
        -> PropertyMapping(Value)
        -> PropertySource<Bonsai.IO.GetFiles,System.String>(MemberName=Path, Value=Textures)
        -> Take(Count=1)
        -> AsyncSubject TextureBankPath

        Annotation(Text="A small value that is used to sum to the visual horizon to instantiate resources.")
        -> FloatProperty(Value=0)
        -> Take(Count=1)
        -> AsyncSubject SigmaZ

        ExternalizedMapping(Value(DisplayName=FarClipHorizon))
        -> FloatProperty(Value=1000)
        -> Take(Count=1)
        -> AsyncSubject FarClipHorizon

        Annotation(Text="The distance used to determine whether a segment should be disposed.") => #20
        ExternalizedMapping(Value(DisplayName=DisposingTreshold)) => #21
        #20, #21 -> FloatProperty(Value=20)
        -> Take(Count=1)
        -> AsyncSubject DisposingTreshold

    GroupWorkflow PatchStatistics
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=EnvironmentStatistics.TransitionMatrix)
        -> MemberSelector(Selector=Data)
        -> FormatTransitionMatrix(NormalizeRows=true)
        -> BehaviorSubject TransitionMatrix

        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=EnvironmentStatistics.Patches)
        -> Merge
        -> ToDictionary(KeySelector=StateIndex, ElementSelector=it)
        -> Take(Count=1)
        -> AsyncSubject PatchStatistics

        SubscribeSubject RngSeed => #11
        SubscribeSubject TransitionMatrix
        -> MemberSelector(Selector=Rows)
        -> Subtract(Operand=IntProperty(Value=1))
        -> PropertyMapping(Upper) => #15
        #11, #15 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
        -> Bonsai.Numerics.Distributions.Sample
        -> Take(Count=1)
        -> BehaviorSubject ActiveStateIndex

        SubscribeSubject ActiveStateIndex
        -> CreateObservable UpdateState
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject PatchIndex

            SubscribeSubject PatchStatistics => #3
            SubscribeSubject PatchIndex
            -> PropertyMapping(Value) => #5
            #3, #5 -> Index(Operand=IntProperty(Value=0))
            -> Take(Count=1)
            -> AsyncSubject ThisPatch

            SubscribeSubject ThisPatch
            -> MulticastSubject ActivePatch

            SubscribeSubject ThisPatch
            -> MemberSelector(Selector=RewardSpecifications.Amount)
            -> MulticastSubject RewardAvailable

            SubscribeSubject GiveReward
            -> SelectMany --RewardsAvailable
                SubscribeSubject RewardAvailable => #0
                WorkflowInput Source1 => #1
                #0, #1 -> Zip
                -> Take(Count=1)
                -> Subtract
                -> MulticastSubject RewardAvailable
                -> WorkflowOutput

            SubscribeSubject RewardAvailable
            -> GreaterThan(Operand=FloatProperty(Value=0))
            -> MulticastSubject RewardDepleted
        -> Switch

        BehaviorSubject<AindVrForagingDataSchema.PatchStatistics> ActivePatch
        BehaviorSubject<System.Single> RewardAvailable
        BehaviorSubject<System.Boolean> RewardDepleted

        BooleanProperty(Value=false)
        -> Take(Count=1)
        -> BehaviorSubject HasRefusedLastReward

    GroupWorkflow OperationalSettings
        ExternalizedMapping(Value(DisplayName=LickToReward))
        -> BooleanProperty(Value=true)
        -> BehaviorSubject IsOperantMode

        ExternalizedMapping(Value(DisplayName=TimeToCollectReward))
        -> TimeSpanProperty(Value=PT1H)
        -> BehaviorSubject TimeToCollectReward

GroupWorkflow HarpDevices
    GroupWorkflow HarpBehavior
        BehaviorSubject<Bonsai.Harp.HarpMessage> HarpBehaviorCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=false, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COMx)
        -> PublishSubject HarpBehaviorEvents

        SubscribeSubject HarpBehaviorEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> Harp.Behavior.FilterRegister(FilterType=Include, Register=Harp.Behavior.AnalogData)
        -> PublishSubject HarpTimestampSource

GroupWorkflow ScreenConfiguration
    Bonsai.Shaders.CreateWindow
      Width=1000
      Height=1000
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Hidden
      WindowState=Maximized
      DisplayDevice=Third
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ScaledTexturedModel
          RenderState=""
          ShaderUniforms=""
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=textureDiffuse, TextureSlot=Texture0, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=BonVision:Shaders.TexturedModel.vert
          FragmentShader=Shaders\ScaledTexturedModel.frag
    -> Bonsai.Resources.LoadResources
    -> WorkflowOutput

    SubscribeSubject SessionSchema
    -> MemberSelector(Selector=Metadata.Hardware.Screen.MonitorCalibrationDirectory)
    -> PropertyMapping(Directory)
    -> IncludeWorkflow(Path=Extensions\LoadAllScreensCalibration.bonsai, Directory=Calibration\Monitors)
    -> Take(Count=1)
    -> AsyncSubject ScreenCalibration

    Bonsai.Shaders.RenderFrame => #11
    SubscribeSubject FarClipHorizon
    -> PropertyMapping(FarClip) => #13
    #11, #13 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1000, Light(X=0, Y=0, Z=0)) => #14
    -> MemberSelector(Selector=ViewMatrix)
    -> Bonsai.Shaders.RotateY(Order=Append, Angle=-3.14159274) => #16
    #16, #14 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as ViewMatrix,
        Item2.ProjectionMatrix as ProjectionMatrix,
        Item2.Light as Light)
    -> PublishSubject Draw3DStim
    -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=DimGray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #20
    SubscribeSubject ScreenCalibration
    -> MemberSelector(Selector=Left)
    -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #23
    #20, #23 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=60.0001403060998, Z=0), Translation(X=-20, Y=0, Z=-8))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333333343, Height=1)
    SubscribeSubject ScreenCalibration
    -> MemberSelector(Selector=Center)
    -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #28
    #20, #28 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-12.7))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333333343, Y=0, Width=0.333333343, Height=1)
    SubscribeSubject ScreenCalibration
    -> MemberSelector(Selector=Right)
    -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #33
    #20, #33 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=-60.0001403060998, Z=0), Translation(X=20, Y=0, Z=-8))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.6666667, Y=0, Width=0.333333, Height=1)
    -> PublishSubject PostDrawing

    GroupWorkflow ScreenBrightnessControl
        FloatProperty(Value=1)
        -> Take(Count=1)
        -> BehaviorSubject ScreenBrightness

        SubscribeSubject PostDrawing
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #5
        SubscribeSubject ScreenBrightness
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: 1.0 - it
        -> PropertyMapping(ColorA) => #8
        #5, #8 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=2, ExtentY=2, LocationX=0, LocationY=0, Layer=100, Angle=0, ColorR=0, ColorG=0, ColorB=0, ColorA=0)

GroupWorkflow LoadTextureBank
    SubscribeSubject TextureBankPath
    -> PropertyMapping(Path)
    -> Bonsai.IO.GetFiles(Path=Textures, SearchPattern=*.jpg, SearchOption=TopDirectoryOnly)
    -> Merge
    -> CreateObservable LoadTexture
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject TexturePath

        SubscribeSubject TexturePath
        -> Bonsai.IO.GetFileNameWithoutExtension => #4
        SubscribeSubject TexturePath
        -> PropertyMapping(FileName)
        -> Bonsai.Shaders.LoadImage => #7
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\wall_4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        #4, #7 -> Zip
        -> WorkflowOutput
    -> Merge
    -> ToDictionary(KeySelector=Item1, ElementSelector=Item2)
    -> AsyncSubject TextureBank

Annotation(Text="")
-> GroupWorkflow TaskControl
    GroupWorkflow PositionControl
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=Metadata.Hardware.Screen.InitialAgentPosition.Z)
        -> InputMapping(Value(Selector=it))
        -> DoubleProperty(Value=0)
        -> Take(Count=1) => #4
        Bonsai.Shaders.Input.MouseWheel
        -> MemberSelector(Selector=EventArgs.DeltaPrecise) => #6
        Disable FloatProperty(Value=0) => #7
        Disable SubscribeSubject Session
        -> Disable MemberSelector(Selector=Metadata.Hardware.Treadmill.Gain)
        -> Disable PropertyMapping(Value) => #10
        #7, #10 -> Disable Multiply(Operand=FloatProperty(Value=0)) => #11
        Bonsai.Shaders.UpdateFrame
        -> Bonsai.Shaders.DelaySubscription(DueTime=PT2S)
        -> FloatProperty(Value=0.5) => #14
        #6, #11, #14 -> Merge
        -> Accumulate
        -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=1, RescaleType=Linear)
        -> Bonsai.Shaders.DelaySubscription(DueTime=PT0.1S) => #18
        #4, #18 -> Concat
        -> InputMapping(Z(Selector=it)) => #20
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=Metadata.Hardware.Screen.InitialAgentPosition)
        -> PropertyMapping(X(Selector=X), Y(Selector=Y)) => #23
        #20, #23 -> Bonsai.Shaders.CreateVector3(X=0, Y=4, Z=97.5)
        -> BehaviorSubject CurrentPosition

        SubscribeSubject CurrentPosition => #26
        Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-100000)
        -> Take(Count=1) => #28
        #26, #28 -> Scan => #29
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Accumulation.Z > Value.Z ? Accumulation : Value
            -> WorkflowOutput
        Annotation "Max(Z)"(Text="") => #30
        #29, #30 -> BehaviorSubject MaxPosition

        Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.05S)
        -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear)
        -> Bonsai.Numerics.Sin
        -> Add(Operand=DoubleProperty(Value=1))
        -> LessThan(Operand=DoubleProperty(Value=0.2))
        -> DistinctUntilChanged => #37
        Annotation(Text="[Discussion](https://github.com/AllenNeuralDynamics/aind-vr-foraging/discussions/3)") => #38
        #37, #38 -> BehaviorSubject IsStopped

    GroupWorkflow OdorControl
        BehaviorSubject<AindVrForagingDataSchema.Odor> OdorControl
        -> WorkflowOutput

    GroupWorkflow RewardControl
        BehaviorSubject<System.Double> GiveReward
        -> WorkflowOutput

        Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=100, PayloadType=U8, Value=0)) => #2
        -> DoubleProperty(Value=0) => #3
        #2, #3 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=100, PayloadType=TimestampedU8))
        -> PublishSubject LickEvent

    GroupWorkflow FeedbackControl
        Unit
        -> Take(Count=1)
        -> BehaviorSubject ChoiceFeedback

GroupWorkflow TaskLogic => #9
    Annotation(Text="")
    -> GroupWorkflow ProceduralGeneration
        GroupWorkflow CorridorDrawing
            ExternalizedMapping(Value(DisplayName=CorridorLength))
            -> FloatProperty(Value=120)
            -> Take(Count=1)
            -> AsyncSubject VisualCorridorLength

            ExternalizedMapping(Value(DisplayName=CorridorSquareDimension))
            -> FloatProperty(Value=120)
            -> Take(Count=1)
            -> AsyncSubject CorridorSquareDimension

            ExternalizedMapping(Value(DisplayName=CorridorTextureName))
            -> StringProperty(Value=random_walls_2)
            -> Take(Count=1)
            -> AsyncSubject VisualCorridorTextureName

            GroupWorkflow Initialize => #12
                SubscribeSubject FarClipHorizon => #0
                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Z) => #2
                #0, #2 -> Zip
                -> Subtract => #4
                SubscribeSubject VisualCorridorLength
                -> PropertyMapping(Value) => #6
                #4, #6 -> Divide(Operand=FloatProperty(Value=120))
                -> Take(Count=1)
                -> InputMapping(Count(Selector=it)) => #9
                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Z)
                -> Take(Count=1)
                -> PropertyMapping(Start) => #13
                #9, #13 -> Range(Start=0, Count=8)
                -> InputMapping(Value(Selector=it))
                -> DoubleProperty(Value=7)
                -> WorkflowOutput
            GroupWorkflow Update => #13
                SubscribeSubject CurrentPosition => #0
                SubscribeSubject MaxPosition => #1
                #0, #1 -> CombineLatest
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector="Item1.Z,Item2.Z")
                    -> GreaterThanOrEqual
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1.Z) => #4
                SubscribeSubject FarClipHorizon
                -> PropertyMapping(Value) => #6
                #4, #6 -> Add(Operand=FloatProperty(Value=1000)) => #7
                SubscribeSubject SigmaZ
                -> PropertyMapping(Value) => #9
                #7, #9 -> Add(Operand=FloatProperty(Value=0)) => #10
                SubscribeSubject VisualCorridorLength
                -> PropertyMapping(Value) => #12
                #10, #12 -> Divide(Operand=FloatProperty(Value=120))
                -> InputMapping(TypeMapping=TypeMapping<System.Double>)
                -> Bonsai.Numerics.Floor
                -> WorkflowOutput
            #12, #13 -> Concat
            -> DistinctUntilChanged => #15
            SubscribeSubject VisualCorridorLength
            -> PropertyMapping(Value) => #17
            #15, #17 -> Multiply(Operand=DoubleProperty(Value=120)) => #18
            #15, #18 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Id,
                Item2 as Start
                )
            -> InputMapping(StartPosition(Selector=Start), Id(Selector=Id)) => #21
            SubscribeSubject VisualCorridorLength
            -> PropertyMapping(Length) => #23
            SubscribeSubject CorridorSquareDimension
            -> PropertyMapping(Height(Selector=it), Width(Selector=it)) => #25
            SubscribeSubject VisualCorridorTextureName
            -> PropertyMapping(Name) => #27
            SubscribeSubject CorridorSquareDimension
            -> PropertyMapping(X(Selector=it), Y(Selector=it))
            -> AindVrForagingDataSchema.TextureSize(X=120, Y=120)
            -> PropertyMapping(TextureSize(Selector=it)) => #31
            #27, #31 -> AindVrForagingDataSchema.Texture(Name=random_walls_2)
            -> PropertyMapping(Texture) => #33
            #21, #23, #25, #33 -> IncludeWorkflow(Path=Extensions\CreateCorridorSpecs.bonsai, Height=120, Id=9, Length=120, StartPosition=1080, Width=120)
            -> ReplaySubject VisualCorridorSpecs(BufferSize=nil)

            SubscribeSubject VisualCorridorSpecs
            -> IncludeWorkflow(Path=Extensions\DrawSegment.bonsai)
            -> Merge
            -> WorkflowOutput

        GroupWorkflow PatchGeneration
            BehaviorSubject<AindVrForagingDataSchema.VirtualSite> SiteSpecs

            SubscribeSubject SiteSpecs
            -> IncludeWorkflow(Path=Extensions\InstantiateSite.bonsai)
            -> Merge

    Annotation(Text="")
    -> GroupWorkflow StateMachine
        Bonsai.Shaders.Timer(DueTime=PT0S)
        -> Take(Count=1) => #1
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=TaskLogicHelper.VirtualSiteGeneration.InterPatchSite.LengthDistribution)
        -> PropertyMapping(Minimum(Selector=Minimum), Maximum(Selector=Maximum), Average(Selector=Mean)) => #4
        #1, #4 -> IncludeWorkflow(Path=Extensions\AddInterPatchSite.bonsai, Minimum=10, Maximum=50, Average=100, Label=InterPatchSite)
        -> SelectMany Patch
            WorkflowInput Source1
            -> Take(Count=1)
            -> BehaviorSubject EntrySite

            SubscribeSubject ChoiceFeedback
            -> BooleanProperty(Value=false)
            -> MulticastSubject HasRefusedLastReward

            SubscribeSubject EntrySite
            -> Take(Count=1) => #7
            SubscribeSubject SessionSchema
            -> MemberSelector(Selector=TaskLogicHelper.VirtualSiteGeneration.GapSite.LengthDistribution)
            -> PropertyMapping(Minimum(Selector=Minimum), Maximum(Selector=Maximum), Average(Selector=Mean)) => #10
            #7, #10 -> IncludeWorkflow(Path=Extensions\AddGapSite.bonsai, Minimum=10, Maximum=30, Average=18, Label=InitialGapSite)
            -> BehaviorSubject FirstPatchSite

            SubscribeSubject FirstPatchSite
            -> Take(Count=1)
            -> Condition NotHasRefusedLast
                WorkflowInput Source1 => #0
                SubscribeSubject HasRefusedLastReward => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany ResetHasRefusedLast => #16
                BooleanProperty(Value=true)
                -> MulticastSubject HasRefusedLastReward
                -> Take(Count=1) => #2
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Take(Count=1)
                -> WorkflowOutput
            SubscribeSubject TimeToCollectReward
            -> PropertyMapping(TimeToCollect(Selector=TotalSeconds)) => #18
            SubscribeSubject IsOperantMode
            -> PropertyMapping(IsOperant) => #20
            SubscribeSubject SessionSchema
            -> MemberSelector(Selector=TaskLogicHelper.VirtualSiteGeneration.RewardSite.LengthDistribution)
            -> PropertyMapping(Minimum(Selector=Minimum), Maximum(Selector=Maximum), Average(Selector=Mean)) => #23
            #16, #18, #20, #23 -> IncludeWorkflow => #24
              Path=Extensions\AddRewardSite.bonsai
              Minimum=15
              Maximum=15
              Average=15
              IsOperant=true
              StopDuration=0
              TimeToCollect=3600
              Amount=1
              Delay=0
              Probability=1
              Label=RewardSite
            SubscribeSubject SessionSchema
            -> MemberSelector(Selector=TaskLogicHelper.VirtualSiteGeneration.GapSite.LengthDistribution)
            -> PropertyMapping(Minimum(Selector=Minimum), Maximum(Selector=Maximum), Average(Selector=Mean)) => #27
            #24, #27 -> IncludeWorkflow(Path=Extensions\AddGapSite.bonsai, Minimum=10, Maximum=30, Average=18, Label=GapSite)
            -> SelectMany WaitForSiteOutcome
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject PreviousSite

                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Z) => #4
                SubscribeSubject PreviousSite
                -> MemberSelector(Selector="Length,StartPosition")
                -> Add => #7
                #4, #7 -> CombineLatest
                -> GreaterThan
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #11
                SubscribeSubject PreviousSite => #12
                #11, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> MulticastSubject FirstPatchSite
            -> Take(Count=1)
            -> Repeat
            -> Condition HasExited
                SubscribeSubject HasRefusedLastReward
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\UpdateState.bonsai)
        -> Repeat
Annotation(Text="Wait for the textures to load in GPU")
-> SubscribeSubject TextureBank => #11
#9, #11 -> SubscribeWhen

BehaviorSubject<AindVrForagingDataSchema.VirtualSite> ActiveSiteLabel
-> AindVrForagingDataSchema.SerializeToYaml

GroupWorkflow Debug
    GroupWorkflow RenderStateQuad
        SubscribeSubject PostDrawing
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #2
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label)
        -> Equal(Operand=StringProperty(Value=InterPatchSite))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
          Expression: it ? 255 : 0
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label) => #8
        -> Equal(Operand=StringProperty(Value=GapSite)) => #9
        #8 -> Equal(Operand=StringProperty(Value=InitialGapSite)) => #10
        #9, #10 -> Zip
        -> BitwiseOr
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
          Expression: it ? 255 : 0
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label)
        -> Equal(Operand=StringProperty(Value=RewardSite))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #17
          Expression: it ? 255 : 0
        #6, #13, #17 -> Zip
        -> PropertyMapping(ColorR(Selector=Item1), ColorG(Selector=Item2), ColorB(Selector=Item3)) => #19
        #2, #19 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.2
          ExtentY=0.2
          LocationX=0.9
          LocationY=0.9
          Layer=100
          Angle=0
          ColorR=0
          ColorG=255
          ColorB=0
          ColorA=1
        -> WorkflowOutput
